{
    "analysis_tasks": [
        {
            "task": "FiducialCorrelationWarp",
            "module": "merlin.analysis.warp",
            "parameters": {
                "highpass_sigma": 2,
                "write_fiducial_images": true,
                "write_aligned_images": true
            }
        },
        {
            "task": "SimpleGlobalAlignment",
            "module": "merlin.analysis.globalalign"
        },
        {
            "task": "CellPoseSegment",
            "module": "merlin.analysis.segment",
            "parameters": {
                "use_gpu": false,
                "warp_task": "FiducialCorrelationWarp",
                "global_align_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "CleanCellBoundaries",
            "module": "merlin.analysis.segment",
            "parameters": {
                "segment_task": "CellPoseSegment",
                "global_align_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "CombineCleanedBoundaries",
            "module": "merlin.analysis.segment",
            "parameters": {
                "cleaning_task": "CleanCellBoundaries"
            }
        },
        {
            "task": "RefineCellDatabases",
            "module": "merlin.analysis.segment",
            "parameters": {
                "segment_task": "CellPoseSegment",
                "combine_cleaning_task": "CombineCleanedBoundaries"
            }
        },
        {
            "task": "ExportCellMetadata",
            "module": "merlin.analysis.segment",
            "parameters": {
                "segment_task": "RefineCellDatabases"
            }
        }
    ]

}
